PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'range_duration': '30', 'sound_repeat': '10', 'test_duration': '15'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = passive
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import os
        import random
        from pylsl import StreamInfo, StreamOutlet
        import socket

        marker_info = StreamInfo('HearingMarkerStream', 'Markers',
                                 1, 0, 'string', 'hearingid2023')

        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        try:
            s = socket.create_connection(("localhost", 22345))
        except ConnectionRefusedError as e:
            print('!!!---Lab Recorder Not Started---!!!')
            s = None
      Begin Experiment:
        sound_files = ['babycry', 'chewing', 'engine', 'seawave', 'typing']
        repeat = int(expInfo['sound_repeat'])
        pupil_duration = int(expInfo['test_duration'])
        # TODO: Check if each file repeats repeat times or not?
        sound_files = sound_files * repeat
        n_trials = len(sound_files)
        random.shuffle(sound_files)
        sound_idx = 0


        participant_id = expInfo['participant']
        task = 'passive'

        if s is not None:
            config_str = f'filename {{template:sub-%p/sub-%p_task-%b.xdf}} {{participant:{participant_id}}} {{task:{task}}}\n'
            print(config_str)

            s.sendall(b"update\n")
            s.sendall(b"select all\n")
            s.sendall(config_str.encode('utf-8'))
            s.sendall(b"start\n")
            started_recording = True
      End Experiment:
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Start Range Test

        (Press Space)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine range_test
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    CodeComponent range_code
      Code Type = Py
      Begin Routine:
        duration = int(expInfo['range_duration'])
    PolygonComponent black_screen
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    PolygonComponent gray_screen
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = $duration
      stopVal [duration (s)] = $duration
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  Routine rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pupil_test
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    CodeComponent pupil_code
      Code Type = Py
      Begin Routine:
        name = f'{sound_files[sound_idx]}.wav'
        sound_path = os.path.join('sounds', name)
    SoundComponent sound_stimuli
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 3
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pupil_duration
      text [set every repeat] = $name
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  Routine setup_pupil
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if sound_idx < len(sound_files)-1:
            sound_idx+=1
        else:
            sound_files = 0
Flow
  Routine welcome
  Routine range_test
  Routine rest
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine setup_pupil
    Routine pupil_test
  LoopTerminator trials
